PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'stimPresTime': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hey!

        Press any key to continue!

        Placement trials 2
    KeyboardComponent welcome_response
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_written_response
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    ImageComponent bg_trial_written
      image = assets/bg_written.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_whatconc
      Code Type = Both
      Begin JS Routine:
        // If the previous response wasn't 'y' or 'left', skip this routine
        if (!needTextInput) {
            continueRoutine = false;
        }
      Begin Routine:
        # PYTHON
        # If the previous response wasn't 'y' or 'left', skip this routine
        if not needTextInput:
            continueRoutine = False
    TextboxComponent textbox_response_training
      bold = False
      borderColor = $(0.0000, 0.0000, 0.0000)
      color = $(-1.0000, -1.0000, 0.0902)
      editable = True
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent click_written_mouse
      clickable = btn_written_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent btn_written_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent written_button_placement
      Code Type = Both
      Begin Experiment:
        btn_written_img.pos = (0, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_written_img.pos = [0, -h/3];  // bottom-right third center
  Routine training_stimulus_presentation
    RoutineSettingsComponent training_stimulus_presentation
      stopVal [duration (s)] = $float(expInfo['stimPresTime'])
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    ImageComponent bg_trial_stimpres
      image = assets/bg_stimpres.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent stimulus_presentation_train
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent stop_training
      allowedKeys = 'q'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_quit_train
      Code Type = Both
      Begin JS Routine:
        stop_training.keys = [];
      Each Frame:
        # press Q to stop the training loop
        if stop_training.keys:
            training_loop.finished = True
            continueRoutine = False
      Each JS Frame:
        // press Q to stop the training loop
        if (stop_training.keys.length > 0) {
            training_loop.finished = true;
            continueRoutine = false;
        }
  Routine start_main
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    TextComponent main_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = This is now the main task
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    KeyboardComponent main_instruction_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_written_response
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    CodeComponent code_whatconc_main
      Code Type = Both
      Begin Experiment:
        previousText = {}   # stores text per concept
      Begin JS Experiment:
        previousText = {};   // stores text per concept
      Begin JS Routine:
        // If the previous response wasn't 'y' or 'left', skip this routine
        if (!needTextInput) {
            continueRoutine = false;
        }

        defaultText = previousText[concept] || "";
      Begin Routine:
        # PYTHON
        # If the previous response wasn't 'y' or 'left', skip this routine
        if not needTextInput:
            continueRoutine = False

        # If we've seen this concept before, preload the previous text
        defaultText = previousText.get(concept, "")
      End JS Routine:
        previousText[concept] = textbox_response_main.text;
      End Routine:
        previousText[concept] = textbox_response_main.text
    TextboxComponent textbox_response_main
      bold = False
      borderColor = $(0.8824, 0.9451, 1.0000)
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $defaultText
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    ButtonComponent end_textinput_button_main
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Kész!
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    TextComponent text_writtenresp_main_orientation
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Melyik fogalomra gondoltál?
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  Routine main_stimulus_presentation
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    ImageComponent stimulus_presentation_main
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $float(expInfo['stimPresTime'])
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    KeyboardComponent yesno_response_main
      allowedKeys = 'y','n','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_main
      Code Type = Both
      End JS Routine:
        // Get the last key pressed (handles array vs single value)
        let _lastKey = null;
        if (typeof yesno_response_main.keys !== 'undefined' && yesno_response_main.keys !== null) {
          _lastKey = Array.isArray(yesno_response_main.keys) ? yesno_response_main.keys.slice(-1)[0] : yesno_response_main.keys;
        }

        // True if last key was 'y' or 'left'
        needTextInput = ((_lastKey === 'y') || (_lastKey === 'left'));
      End Routine:
        # PYTHON (auto-translated to JS by PsychoPy if "Both" is selected)
        # Get the last key pressed (handles list vs single value)
        _lastKey = None
        if yesno_response_main.keys is not None:
            _lastKey = yesno_response_main.keys[-1] if isinstance(yesno_response_main.keys, list) else yesno_response_main.keys

        needTextInput = (_lastKey in ['y', 'left'])
  Routine end
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = It\'s over!
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  Routine start_screen
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    ImageComponent bg_start_img
      image = assets/bg_start.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_start_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_start_mouse
      clickable = btn_start_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine welcome_screen
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    ImageComponent bg_welcome_img
      image = assets/bg_welcome.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_welcome_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_welcome_mouse
      clickable = btn_welcome_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent welcome_screen_button_placement
      Code Type = Both
      Begin Experiment:
        w, h = win.size  # window width and height in pixels
        btn_welcome_img.pos = (w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        let w = psychoJS.window.size[0];  // window width in px
        let h = psychoJS.window.size[1];  // window height in px

        btn_welcome_img.pos = [w/3, -h/3];  // bottom-right third center
  Routine rules_start_screen
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    ImageComponent bg_rulesstart_img
      image = assets/bg_rules-start.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rulesstart_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rulesstart_mouse
      clickable = btn_rulesstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rulesstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rulesstart_img.pos = (-w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rulesstart_img.pos = [-w/3, -h/3];  // bottom-right third center
  Routine rules_01_screen
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    ImageComponent bg_rules01_img
      image = assets/bg_rules-01.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rules01_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rules01_mouse
      clickable = btn_rules01_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rules01_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rules01_img.pos = (-w/3, -h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rules01_img.pos = [-w/3, -h/3];  // bottom-right third center
  Routine rules_02_screen
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    ImageComponent bg_rules02_img
      image = assets/bg_rules-02.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_rules02_img
      image = assets/button_jatsszunk.png
      size = (272, 74.5)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_rules02_mouse
      clickable = btn_rules02_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent rules02_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_rules02_img.pos = (w/3, h/3)  # bottom-right third center
      Begin JS Experiment:
        btn_rules02_img.pos = [w/3, h/3];  // bottom-right third center
  Routine trial_start_screen
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    ImageComponent bg_trialstart_img
      image = assets/bg_trial-start.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_trialstart_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_trialstart_mouse
      clickable = btn_trialstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent trialstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_trialstart_img.pos = (3*(w/8), 0)  # bottom-right third center
      Begin JS Experiment:
        btn_trialstart_img.pos = [3*(w/8), 0];  // bottom-right third center
  Routine main_start_screen
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    ImageComponent bg_mainstart_img
      image = assets/bg_main-start.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_mainstart_img
      image = assets/button_start.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent click_mainstart_mouse
      clickable = btn_mainstart_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent mainstart_screen_button_placement
      Code Type = Both
      Begin Experiment:
        btn_mainstart_img.pos = (-3*(w/8), 0)  # bottom-right third center
      Begin JS Experiment:
        btn_mainstart_img.pos = [-3*(w/8), 0];  // bottom-right third center
  Routine training_yesno_response
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    ImageComponent bg_trial_yesno
      image = assets/bg_yesno.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent btn_yesno_yes_img
      image = assets/button_igen.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent btn_yesno_no_img
      image = assets/button_nem.png
      size = (268.5, 87)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent trial_yesno_response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent click_yesno_mouse
      clickable = btn_yesno_yes_img, btn_yesno_no_img
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent training_yesno_button_placement
      Code Type = Both
      Begin Experiment:
        btn_yesno_yes_img.pos = (w/4, -h/3)
        btn_yesno_no_img.pos = (-w/4, -h/3)
      Begin JS Experiment:
        btn_yesno_yes_img.pos = [w/4, -h/3];
        btn_yesno_no_img.pos = [-w/4, -h/3];
      End JS Routine:
        // Get the last key pressed (handles list vs single value)
        let _lastKey = null;
        if (trial_yesno_response.keys !== undefined && trial_yesno_response.keys !== null) {
            if (Array.isArray(trial_yesno_response.keys)) {
                _lastKey = trial_yesno_response.keys[trial_yesno_response.keys.length - 1];
            } else {
                _lastKey = trial_yesno_response.keys;
            }
        }

        // Detect button click
        let _yesButtonClicked = false;

        // Check mouse clicks every frame
        if (typeof click_yesno_mouse !== 'undefined') {
            if (click_yesno_mouse.clicked_name !== undefined && click_yesno_mouse.clicked_name !== null) {
                if (click_yesno_mouse.clicked_name.includes('btn_yesno_yes_img')) {
                    _yesButtonClicked = true;
                }
            }
        }

        // Final condition: Yes = keyboard OR button
        needTextInput = (
            _lastKey === 'y' ||
            _lastKey === 'right' ||
            _yesButtonClicked
        );
      End Routine:
        # Get the last key pressed (handles list vs single value)
        _lastKey = None
        if trial_yesno_response.keys is not None:
            _lastKey = trial_yesno_response.keys[-1] if isinstance(yesno_response_train.keys, list) else trial_yesno_response.keys

        # Detect button click (mouse)
        _yesButtonClicked = False
        if btn_yesno_yes_img.status == FINISHED:
            # If using a mouse component, check its.clicked_name
            if 'mouse' in locals():
                if hasattr(mouse, 'clicked_name') and mouse.clicked_name is not None:
                    _yesButtonClicked = ('btn_yesno_yes_img' in mouse.clicked_name)

        # Final condition: Yes = keyboard OR button
        needTextInput = ((_lastKey in ['y', 'right']) or _yesButtonClicked)
Flow
  Routine start_screen
  Routine welcome_screen
  Routine rules_start_screen
  Routine rules_01_screen
  Routine rules_02_screen
  Routine trial_start_screen
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = sequences/training.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'stimuli/stim001.png')]),
      OrderedDict([('stimulus', 'stimuli/stim002.png')]),
      OrderedDict([('stimulus', 'stimuli/stim003.png')])]
    Routine training_stimulus_presentation
    Routine training_yesno_response
    Routine training_written_response
  LoopTerminator training_loop
  Routine main_start_screen
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = sequences/main_modified.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'stimuli/stim004.png'), ('concept', 'AAA')]),
      OrderedDict([('stimulus', 'stimuli/stim005.png'), ('concept', 'AAA')]),
      OrderedDict([('stimulus', 'stimuli/stim006.png'), ('concept', 'AAA')]),
      OrderedDict([('stimulus', 'stimuli/stim004.png'), ('concept', 'BBB')]),
      OrderedDict([('stimulus', 'stimuli/stim005.png'), ('concept', 'BBB')]),
      OrderedDict([('stimulus', 'stimuli/stim006.png'), ('concept', 'BBB')])]
    Routine main_stimulus_presentation
    Routine main_written_response
  LoopTerminator main_loop
  Routine end
